# Generated by Configurator on Fri May 13 08:58:14 CEST 2011

# Reset
Property,Core,Initialize,0

# Devices
Device,GPhoto,GPhoto,GPhoto
Device,DStage,DemoCamera,DStage
Device,DShutter,DemoCamera,DShutter
Device,SimpleAutofocus,SimpleAutofocus,SimpleAutofocus

# Pre-init settings for devices

# Pre-init settings for COM ports

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Camera,GPhoto
Property,Core,Shutter,DShutter
Property,Core,Focus,DStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

