# Generated by Configurator on Fri Oct 01 21:43:03 CEST 2010

# Reset
Property,Core,Initialize,0

# Devices
Device,COM6,SerialManager,COM6
Device,COM11,SerialManager,COM11
Device,ASI_XY,ASIStage,XYStage
Device,ABSCam,ABSCamera,ABSCam
Device,Andor,Andor,Andor
Device,AOTF639,AAAOTF,AAAOTF
Device,AOTF561,AAAOTF,AAAOTF
Device,AOTF532,AAAOTF,AAAOTF
Device,AOTF491,AAAOTF,AAAOTF
Device,AOTF405,AAAOTF,AAAOTF
Device,multiAAAOTF,AAAOTF,multiAAAOTF
Device,TIScope,NikonTI,TIScope
Device,TILightPath,NikonTI,TILightPath
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,TIAuxShutter,NikonTI,TIAuxShutter
Device,TINosePiece,NikonTI,TINosePiece
Device,TIZDrive,NikonTI,TIZDrive

# Pre-init settings for devices
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,9600
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM11,AnswerTimeout,500.0000
Property,COM11,BaudRate,19200
Property,COM11,DelayBetweenCharsMs,0.0000
Property,COM11,Handshaking,Off
Property,COM11,Parity,None
Property,COM11,StopBits,1
Property,ASI_XY,Port,COM6
Property,ABSCam,Camera,UK1158m#00865
Property,Andor,Camera,| iXon | DU897_BV | 3666 |
Property,AOTF639,Port,COM11
Property,AOTF561,Port,COM11
Property,AOTF532,Port,COM11
Property,AOTF491,Port,COM11
Property,AOTF405,Port,COM11
Property,multiAAAOTF,Port,COM11

# Pre-init settings for COM ports

# Initialize
Property,Core,Initialize,1
Property,AOTF639,Maximum intensity (dB),2150
Property,AOTF639,Channel,1
Property,AOTF561,Maximum intensity (dB),2000
Property,AOTF561,Channel,2
Property,AOTF532,Maximum intensity (dB),1930
Property,AOTF532,Channel,3
Property,AOTF491,Maximum intensity (dB),1840
Property,AOTF491,Channel,4
Property,AOTF405,Maximum intensity (dB),1740
Property,AOTF405,Channel,5

# Delays

# Roles
Property,Core,Camera,ABSCam
Property,Core,Shutter,TIAuxShutter
Property,Core,Focus,TIPFSOffset
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TILightPath
Label,TILightPath,3,Left80
Label,TILightPath,2,Right100
Label,TILightPath,1,Left100
Label,TILightPath,0,Eye100
# TINosePiece
Label,TINosePiece,5,6-SFluor  40x na 1.30
Label,TINosePiece,4,5-     
Label,TINosePiece,3,4-    
Label,TINosePiece,2,3-   
Label,TINosePiece,1,2-PlanFluor  10x na 0.30
Label,TINosePiece,0,1-ApoTIRF 100x na 1.49

# Configuration presets
# Group: 639Intensity
# Preset: NewPreset
ConfigGroup,639Intensity,NewPreset,AOTF639,Power (% of max),100
Property,AOTF639,Power (% of max),10

# Group: 561Intensity
# Preset: NewPreset
ConfigGroup,561Intensity,NewPreset,AOTF561,Power (% of max),100
Property,AOTF561,Power (% of max),10

# Group: Camera
# Preset: AndorFT
ConfigGroup,Camera,AndorFT,Andor,FrameTransfer,On
ConfigGroup,Camera,AndorFT,TILightPath,Label,Left100
ConfigGroup,Camera,AndorFT,Core,AutoShutter,1
ConfigGroup,Camera,AndorFT,Core,Camera,Andor
ConfigGroup,Camera,AndorFT,Core,Shutter,AOTF491

# Preset: ABS
ConfigGroup,Camera,ABS,Core,AutoShutter,1
ConfigGroup,Camera,ABS,Core,Camera,ABSCam
ConfigGroup,Camera,ABS,Core,Shutter,TIAuxShutter
ConfigGroup,Camera,ABS,TILightPath,Label,Eye100
ConfigGroup,Camera,ABS,Andor,FrameTransfer,Off

# Preset: Andor
ConfigGroup,Camera,Andor,Core,AutoShutter,1
ConfigGroup,Camera,Andor,Core,Camera,Andor
ConfigGroup,Camera,Andor,Core,Shutter,AOTF491
ConfigGroup,Camera,Andor,TILightPath,Label,Left100
ConfigGroup,Camera,Andor,Andor,FrameTransfer,Off


# Group: 532Intensity
# Preset: NewPreset
ConfigGroup,532Intensity,NewPreset,AOTF532,Power (% of max),100
Property,AOTF532,Power (% of max),10


# Group: Andorgain
# Preset: NewPreset
ConfigGroup,Andorgain,NewPreset,Andor,Gain,3


# Group: 491Intensity
# Preset: NewPreset
ConfigGroup,491Intensity,NewPreset,AOTF491,Power (% of max),100
Property,AOTF491,Power (% of max),10

# Group: 405Intensity
# Preset: NewPreset
ConfigGroup,405Intensity,NewPreset,AOTF405,Power (% of max),100
Property,AOTF405,Power (% of max),10

# Group: Laserline
# Preset: 561
ConfigGroup,Laserline,561,AOTF639,State,0
ConfigGroup,Laserline,561,AOTF561,State,1
ConfigGroup,Laserline,561,AOTF532,State,0
ConfigGroup,Laserline,561,AOTF491,State,0
ConfigGroup,Laserline,561,AOTF405,State,0
ConfigGroup,Laserline,561,TIAuxShutter,State,0

# Preset: All
ConfigGroup,Laserline,All,AOTF639,State,1
ConfigGroup,Laserline,All,AOTF561,State,1
ConfigGroup,Laserline,All,AOTF532,State,1
ConfigGroup,Laserline,All,AOTF491,State,1
ConfigGroup,Laserline,All,AOTF405,State,1
ConfigGroup,Laserline,All,TIAuxShutter,State,0

# Preset: 639
ConfigGroup,Laserline,639,AOTF639,State,1
ConfigGroup,Laserline,639,AOTF561,State,0
ConfigGroup,Laserline,639,AOTF532,State,0
ConfigGroup,Laserline,639,AOTF491,State,0
ConfigGroup,Laserline,639,AOTF405,State,0
ConfigGroup,Laserline,639,TIAuxShutter,State,0

# Preset: 532
ConfigGroup,Laserline,532,AOTF639,State,0
ConfigGroup,Laserline,532,AOTF561,State,0
ConfigGroup,Laserline,532,AOTF532,State,1
ConfigGroup,Laserline,532,AOTF491,State,0
ConfigGroup,Laserline,532,AOTF405,State,0
ConfigGroup,Laserline,532,TIAuxShutter,State,0

# Preset: Off
ConfigGroup,Laserline,Off,AOTF639,State,0
ConfigGroup,Laserline,Off,AOTF561,State,0
ConfigGroup,Laserline,Off,AOTF532,State,0
ConfigGroup,Laserline,Off,AOTF491,State,0
ConfigGroup,Laserline,Off,AOTF405,State,0
ConfigGroup,Laserline,Off,TIAuxShutter,State,0

# Preset: 491&561
ConfigGroup,Laserline,491&561,AOTF639,State,0
ConfigGroup,Laserline,491&561,AOTF561,State,1
ConfigGroup,Laserline,491&561,AOTF532,State,0
ConfigGroup,Laserline,491&561,AOTF491,State,1
ConfigGroup,Laserline,491&561,AOTF405,State,0
ConfigGroup,Laserline,491&561,TIAuxShutter,State,0

# Preset: 405
ConfigGroup,Laserline,405,AOTF639,State,0
ConfigGroup,Laserline,405,AOTF561,State,1
ConfigGroup,Laserline,405,AOTF532,State,0
ConfigGroup,Laserline,405,AOTF491,State,1
ConfigGroup,Laserline,405,AOTF405,State,0
ConfigGroup,Laserline,405,TIAuxShutter,State,0

# Group: multiAOTF
# Preset: 491
ConfigGroup,multiAOTF,491,multiAAAOTF,Channels (8 bit word 1..255),8
ConfigGroup,multiAOTF,491,multiAAAOTF,State,0

# Preset: 405
ConfigGroup,multiAOTF,405,multiAAAOTF,Channels (8 bit word 1..255),16
ConfigGroup,multiAOTF,405,multiAAAOTF,State,0

# Preset: 532
ConfigGroup,multiAOTF,532,multiAAAOTF,Channels (8 bit word 1..255),4
ConfigGroup,multiAOTF,532,multiAAAOTF,State,0

# Preset: 561
ConfigGroup,multiAOTF,561,multiAAAOTF,Channels (8 bit word 1..255),2
ConfigGroup,multiAOTF,561,multiAAAOTF,State,0

# Preset: 639
ConfigGroup,multiAOTF,639,multiAAAOTF,Channels (8 bit word 1..255),1
ConfigGroup,multiAOTF,639,multiAAAOTF,State,0


# Preset: 491&561
ConfigGroup,multiAOTF,491&561,multiAAAOTF,Channels (8 bit word 1..255),10
ConfigGroup,multiAOTF,491&561,multiAAAOTF,State,0

# Preset: 561&639
ConfigGroup,multiAOTF,561&639,multiAAAOTF,Channels (8 bit word 1..255),3
ConfigGroup,multiAOTF,561&639,multiAAAOTF,State,0

# Preset: 491&561&639
ConfigGroup,multiAOTF,491&561&639,multiAAAOTF,Channels (8 bit word 1..255),11
ConfigGroup,multiAOTF,491&561&639,multiAAAOTF,State,0








# PixelSize settings
# Resolution preset: ResABS10x
ConfigPixelSize,ResABS10x,TINosePiece,Label,2-PlanFluor  10x na 0.30
PixelSize_um,ResABS10x,0.645
ConfigPixelSize,ResABS10x,Core,Camera,ABSCam
PixelSize_um,ResABS10x,0.645

# Resolution preset: ResAndor10x
ConfigPixelSize,ResAndor10x,TINosePiece,Label,2-PlanFluor  10x na 0.30
PixelSize_um,ResAndor10x,0.8
ConfigPixelSize,ResAndor10x,Core,Camera,Andor
PixelSize_um,ResAndor10x,0.8

# Resolution preset: ResABS100x
ConfigPixelSize,ResABS100x,TINosePiece,Label,1-ApoTIRF 100x na 1.49
PixelSize_um,ResABS100x,0.0645
ConfigPixelSize,ResABS100x,Core,Camera,ABSCam
PixelSize_um,ResABS100x,0.0645

# Resolution preset: ResAndor100x
ConfigPixelSize,ResAndor100x,TINosePiece,Label,1-ApoTIRF 100x na 1.49
PixelSize_um,ResAndor100x,0.08
ConfigPixelSize,ResAndor100x,Core,Camera,Andor
PixelSize_um,ResAndor100x,0.08


