# Generated by Configurator on Thu Apr 09 14:55:39 EDT 2020

# Reset
Property,Core,Initialize,0

# Devices
Device,COM3,SerialManager,COM3
Device,COM4,SerialManager,COM4
Device,Cobolt,Cobolt,Cobolt
Device,DHub,DemoCamera,DHub
Device,DCam,DemoCamera,DCam
Device,NicoLase-Channel,UserDefinedSerial,UserDefinedStateDevice
Device,NicoLase-Shutter,UserDefinedSerial,UserDefinedShutter

# Pre-init settings for devices
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,115200
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,9600
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,0
Property,Cobolt,Max Power,50.0000
Property,Cobolt,Port,COM3
Property,DCam,MaximumExposureMs,10000.0000
Property,NicoLase-Channel,Command mode,ASCII-LF-terminator
Property,NicoLase-Channel,Initialize-command,
Property,NicoLase-Channel,Initialize-response,
Property,NicoLase-Channel,Number of positions,4
Property,NicoLase-Channel,Port,COM4
Property,NicoLase-Channel,Response detection,Ignore responses
Property,NicoLase-Channel,Shutdown-command,
Property,NicoLase-Channel,Shutdown-response,
Property,NicoLase-Shutter,Close-command,O
Property,NicoLase-Shutter,Close-response,Turn off all outputs
Property,NicoLase-Shutter,Command mode,ASCII-LF-terminator
Property,NicoLase-Shutter,Initialize-command,O
Property,NicoLase-Shutter,Initialize-response,Turn off all outputs
Property,NicoLase-Shutter,Open-command,Q
Property,NicoLase-Shutter,Open-response,Turn on first sequence
Property,NicoLase-Shutter,Port,COM4
Property,NicoLase-Shutter,QueryState-closed-response,0
Property,NicoLase-Shutter,QueryState-command,
Property,NicoLase-Shutter,QueryState-open-response,1
Property,NicoLase-Shutter,Response detection,Ignore responses
Property,NicoLase-Shutter,Shutdown-command,
Property,NicoLase-Shutter,Shutdown-response,

# Pre-init settings for COM ports

# Hub (parent) references
Parent,DCam,DHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,DCam
Property,Core,Shutter,Cobolt
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# NicoLase-Channel
Label,NicoLase-Channel,3,561
Label,NicoLase-Channel,2,488
Label,NicoLase-Channel,1,405
Label,NicoLase-Channel,0,All

# Configuration presets
# Group: Laser Power
# Preset: NewPreset
ConfigGroup,Laser Power,NewPreset,Cobolt,Power,0.0000


# Group: Laser Status
# Preset: NewPreset
ConfigGroup,Laser Status,NewPreset,Cobolt,Operating Status,Waiting for key


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,NicoLase-Channel,SetPosition-command-0,M B000000
ConfigGroup,System,Startup,NicoLase-Channel,SetPosition-command-1,M B001000
ConfigGroup,System,Startup,NicoLase-Channel,SetPosition-command-2,M B000100
ConfigGroup,System,Startup,NicoLase-Channel,SetPosition-command-3,M B000001
ConfigGroup,System,Startup,NicoLase-Channel,Label,561


# Group: NicoLase-Channel
# Preset: 561
ConfigGroup,NicoLase-Channel,561,NicoLase-Channel,Label,561

# Preset: All
ConfigGroup,NicoLase-Channel,All,NicoLase-Channel,Label,All

# Preset: 488
ConfigGroup,NicoLase-Channel,488,NicoLase-Channel,Label,488

# Preset: 405
ConfigGroup,NicoLase-Channel,405,NicoLase-Channel,Label,405


# Group: Laser Current
# Preset: NewPreset
ConfigGroup,Laser Current,NewPreset,Cobolt,Current,0.0000


# Group: Laser Power Status
# Preset: NewPreset
ConfigGroup,Laser Power Status,NewPreset,Cobolt,Power Status,1.3000


# Group: Laser Current Status
# Preset: NewPreset
ConfigGroup,Laser Current Status,NewPreset,Cobolt,Current Status,1140



# PixelSize settings

