# Generated by Configurator on Sun Mar 02 20:54:08 PST 2008

# Reset
Property,Core,Initialize,0

# Devices
Device,Velleman K8061-0,USBManager,Velleman K8061-0
Device,K8061-Hub,K8061,K8061-Hub
Device,K8061-Switch,K8061,K8061-Switch
Device,K8061-Shutter,K8061,K8061-Shutter
Device,K8061-DAC-1,K8061,K8061-DAC
Device,K8061-DAC-4,K8061,K8061-DAC
Device,K8061-Input,K8061,K8061-Input

# Pre-init settings for devices
Property,K8061-Hub,Port,Velleman K8061-0
Property,K8061-DAC-1,Channel,1
Property,K8061-DAC-4,Channel,4

# Pre-init settings for COM ports
Property,Velleman K8061-0,AnswerTimeout,20.00

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Shutter,K8061-Shutter
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

