# Generated by Configurator on Mon Nov 19 11:43:50 PST 2007

# Reset
Property,Core,Initialize,0

# Devices
Device,/dev/tty.USA19H1d2P1.1,SerialManager,/dev/tty.USA19H1d2P1.1
Device,Scope,ZeissCAN29,ZeissScope
Device,Dichroics,ZeissCAN29,ZeissReflectorTurret
Device,Objectives,ZeissCAN29,ZeissObjectiveTurret
Device,SidePort,ZeissCAN29,ZeissSidePort
Device,TransShutter,ZeissCAN29,ZeissTransmittedLightShutter
Device,FLAttenuator,ZeissCAN29,ZeissRL-FLAttenuator
Device,CondenserContrast,ZeissCAN29,ZeissCondenserContrast
Device,CondenserAperture,ZeissCAN29,ZeissCondenserAperture
Device,Halogen,ZeissCAN29,ZeissHalogenLamp
Device,DStreamCam,DemoStreamingCamera,DStreamCam

# Pre-init settings for devices
Property,Scope,AnswerTimeOut,250.00
Property,Scope,Port,/dev/tty.USA19H1d2P1.1

# Pre-init settings for COM ports
Property,/dev/tty.USA19H1d2P1.1,AnswerTimeout,500.00
Property,/dev/tty.USA19H1d2P1.1,BaudRate,57600
Property,/dev/tty.USA19H1d2P1.1,DataBits,8
Property,/dev/tty.USA19H1d2P1.1,DelayBetweenCharsMs,0
Property,/dev/tty.USA19H1d2P1.1,StopBits,1

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Camera,DStreamCam
Property,Core,Shutter,TransShutter
Property,Core,AutoShutter,1

# Camera-synchronized devices
ImageSynchro,Dichroics

# Labels

# Configuration presets
# Group: Channel
# Preset: BFP
ConfigGroup,Channel,BFP,Dichroics,Label,2-34 BFP

# Preset: 1
ConfigGroup,Channel,1,Dichroics,Label,1- 

# Preset: GFP
ConfigGroup,Channel,GFP,Dichroics,Label,3-38 GFP

# Preset: TR
ConfigGroup,Channel,TR,Dichroics,Label,4-45 TR


# Group: System
# Preset: Startup



# PixelSize settings

